name: test_workflow
metadata:
  author: Aileen Cleary
  info: Test workflow for mir base.
  version: 0.1

modules:
  - name: mir_base

flowdef:
  - name: Move to Position
    module: mir_base
    action: move
    args:
      target_location: "test_pos"
      description: ""
      priority: 1
    comment: Move to position in front of charger.

  - name: Dock to Charger
    module: mir_base
    action: dock
    args:
      target_location: "charger1"
    comment: Dock to charger.

  - name: Wait until Done.
    module: mir_base
    action: wait_until_finished
    comment: Waits for previous mission to be done executing before continuing.
      
